CellProfiler Pipeline: http://www.cellprofiler.org
Version:4
DateRevision:319
GitHash:
ModuleCount:9
HasImagePlaneDetails:False

Images:[module_num:1|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
    Filter images?:Images only
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
Metadata:[module_num:2|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notes:['The Metadata module optionally allows you to extract information describing your images (i.e, metadata) which will be stored along with your measurements. This information can be contained in the file name and/or location, (?P<ImageID>[^\\\\\\\\]*)(?P<ImageID>[^\\\\\\\\]*)or in an external file.']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
    Extract metadata?:Yes
    Metadata data type:Text
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    Extraction method count:2
    Metadata extraction method:Extract from file/folder names
    Metadata source:File name
    Regular expression to extract from file name:(?P<ImageID>[^\\]*)
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    Extract metadata from:All images
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    Metadata extraction method:Extract from file/folder names
    Metadata source:Folder name
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    Regular expression to extract from folder name:(?P<SetID>[^\\]*$)
    Extract metadata from:All images
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
NamesAndTypes:[module_num:3|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
    Assign a name to:All images
    Select the image type:Grayscale image
    Name to assign these images:c1
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    Set intensity range from:Image metadata
    Assignments count:1
    Single images count:0
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    Process as 3D?:No
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
Groups:[module_num:4|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
    Do you want to group your images?:Yes
    grouping metadata count:1
    Metadata category:SetID

IdentifyPrimaryObjects:[module_num:5|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notes:['Identify the nuclei from the DAPI image. Three-class thresholding performs better than the default two-class thresholding in this case.']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
    Select the input image:c1
    Name the primary objects to be identified:c1
    Typical diameter of objects, in pixel units (Min,Max):50,200
    Discard objects outside the diameter range?:Yes
    Discard objects touching the border of the image?:Yes
    Method to distinguish clumped objects:Intensity
    Method to draw dividing lines between clumped objects:Shape
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    Speed up by using lower-resolution image to find local maxima?:Yes
    Fill holes in identified objects?:After both thresholding and declumping
    Automatically calculate size of smoothing filter for declumping?:Yes
    Automatically calculate minimum allowed distance between local maxima?:Yes
    Handling of objects if excessive number of objects identified:Continue
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    Use advanced settings?:Yes
    Threshold setting version:9
    Threshold strategy:Global
    Thresholding method:Otsu
    Threshold smoothing scale:1.3488
    Threshold correction factor:1.0
    Lower and upper bounds on threshold:0,1
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    Two-class or three-class thresholding?:Two classes
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
MeasureObjectSizeShape:[module_num:6|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
    Select objects to measure:c1
    Calculate the Zernike features?:No

ConvertObjectsToImage:[module_num:7|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
    Select the input objects:c1
    Name the output image:Segmented_cell
    Select the color format:Grayscale
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
SaveImages:[module_num:8|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
    Select the type of image to save:Image
    Select the image to save:Segmented_cell
    Select method for constructing file names:From image filename
    Select image name for file prefix:c1
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    Append a suffix to the image file name?:No
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    Saved file format:tiff
    Output file location:Default Output Folder sub-folder|\g<SetID>
    Image bit depth:16-bit integer
    Overwrite existing files without warning?:Yes
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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
ExportToSpreadsheet:[module_num:9|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
    Select the column delimiter:Comma (",")
    Add image metadata columns to your object data file?:No
    Select the measurements to export:Yes
    Calculate the per-image mean values for object measurements?:No
    Calculate the per-image median values for object measurements?:No
    Calculate the per-image standard deviation values for object measurements?:No
    Output file location:Default Output Folder sub-folder|\g<SetID>
    Create a GenePattern GCT file?:No
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    Export all measurement types?:No
    Press button to select measurements:c1|AreaShape_Perimeter,c1|AreaShape_FormFactor,c1|AreaShape_MinorAxisLength,c1|AreaShape_Orientation,c1|AreaShape_Area,c1|AreaShape_MinFeretDiameter,c1|AreaShape_Solidity,c1|AreaShape_MaxFeretDiameter,c1|AreaShape_EulerNumber,c1|AreaShape_Eccentricity,c1|AreaShape_Compactness,c1|AreaShape_Extent,c1|AreaShape_MedianRadius,c1|AreaShape_MaximumRadius,c1|AreaShape_MeanRadius,c1|AreaShape_MajorAxisLength,c1|AreaShape_Center_Y,c1|AreaShape_Center_X,c1|AreaShape_Center_Z,c1|Number_Object_Number,c1|Location_Center_Y,c1|Location_Center_X,c1|Location_Center_Z
    Representation of Nan/Inf:NaN
    Add a prefix to file names?:Yes
    Filename prefix:CellProfiler datasheet 
    Overwrite existing files without warning?:No
    Data to export:c1
    Combine these object measurements with those of the previous object?:No
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    Use the object name for the file name?:Yes
